# Generated by OpenSesame 0.26 (Earnest Einstein)
# Sat May 19 14:24:27 2012 (posix)
# 
# Copyright Sebastiaan Mathot (2010-2011)
# <http://www.cogsci.nl>
# 
set foreground "white"
set subject_parity "even"
set description "Default description"
set title "New experiment"
set compensation "0"
set coordinates "relative"
set height "768"
set mouse_backend "legacy"
set width "1024"
set sampler_backend "legacy"
set keyboard_backend "legacy"
set background "black"
set subject_nr "0"
set canvas_backend "legacy"
set start "experiment"
set synth_backend "legacy"

define sequence experiment
	set flush_keyboard "yes"
	set description "Runs a number of items in sequence"
	run _inline_script "always"
	run _text_input "always"
	run divblock "always"
	run inline_script "always"
	run _logger "always"
	run end_feedback "always"

define inline_script __inline_script
	___run__
	self.experiment.set("trialcount",self.get("trialcount")+1)
	if self.get("correct") == 1:
		self.experiment.set("corrcount",self.get("corrcount")+1)
	__end__
	set _prepare ""
	set description "Executes Python code"

define text_input _text_input
	set foreground "white"
	set font_size "24"
	set description "Provides a simple text input"
	set accept_on "return press"
	set frame "yes"
	set background "black"
	set timeout "1000"
	set frame_width "3"
	set _question "U+05DDU+05E9"
	set linewidth "600"
	set font_family "SILEOT"

define feedback end_feedback
	set duration "keypress"
	set reset_variables "yes"
	set description "Provides feedback to the participant"
	draw textline 0 0 "[acctot]" center=1 color=white font_family=mono font_size=18 show_if="always"
	draw textline 0 100 "!U+05D3U+05D5U+05D1U+05DBU+05D4 U+05DCU+05DB" center=1 color=white font_family=SILEOT font_size=18 show_if="[acctot]=100"
	draw textline 128 0 "U+05E9[timeFB]" center=1 color=white font_family=SILEOT font_size=18 show_if="always"

define inline_script _inline_script
	___run__
	self.experiment.set("corrcount",0)
	self.experiment.set("trialcount",0)
	__end__
	set _prepare ""
	set description "Executes Python code"

define logger _logger
	set ignore_missing "yes"
	set unicode "no"
	set description "Logs experimental data"
	set auto_log "no"
	set use_quotes "yes"
	log "avg_rt"
	log "acctot"

define sequence add
	set flush_keyboard "yes"
	set description "Runs a number of items in sequence"
	run quest "always"
	run __inline_script "always"
	run _feedback "always"
	run logger "always"

define text_input quest
	set foreground "white"
	set linewidth "600"
	set font_size "24"
	set description "Provides a simple text input"
	set accept_on "return press"
	set frame "yes"
	set timeout "1000"
	set frame_width "3"
	set background "black"
	set _question "[num3]+[num2]="
	set font_family "sans"

define loop divblock
	set repeat "1"
	set description "Repeatedly runs another item"
	set skip "0"
	set offset "no"
	set item "minus"
	set column_order "correct_response;num2;num3"
	set cycles "11"
	set order "random"
	setcycle 0 correct_response "5"
	setcycle 0 num2 "2"
	setcycle 0 num3 "3"
	setcycle 1 correct_response "7"
	setcycle 1 num2 "3"
	setcycle 1 num3 "4"
	setcycle 2 correct_response "8"
	setcycle 2 num2 "3"
	setcycle 2 num3 "5"
	setcycle 3 correct_response "9"
	setcycle 3 num2 "4"
	setcycle 3 num3 "5"
	setcycle 4 correct_response "9"
	setcycle 4 num2 "3"
	setcycle 4 num3 "6"
	setcycle 5 correct_response "10"
	setcycle 5 num2 "8"
	setcycle 5 num3 "2"
	setcycle 6 correct_response "10"
	setcycle 6 num2 "3"
	setcycle 6 num3 "7"
	setcycle 7 correct_response "10"
	setcycle 7 num2 "4"
	setcycle 7 num3 "6"
	setcycle 8 correct_response "9"
	setcycle 8 num2 "2"
	setcycle 8 num3 "7"
	setcycle 9 correct_response "8"
	setcycle 9 num2 "2"
	setcycle 9 num3 "6"
	setcycle 10 correct_response "7"
	setcycle 10 num2 "2"
	setcycle 10 num3 "5"
	run add

define feedback _feedback
	set duration "1000"
	set reset_variables "no"
	set description "Provides feedback to the participant"
	draw textline -160 -256 "V" center=1 color=green font_family=mono font_size=18 show_if="[correct]=1"
	draw textline -160 -256 "[correct_response]" center=1 color=red font_family=mono font_size=18 show_if="[correct]=0"

define logger logger
	set ignore_missing "yes"
	set unicode "yes"
	set description "Logs experimental data"
	set auto_log "no"
	set use_quotes "yes"
	log "response"
	log "response_time"
	log "correct"
	log "correct_response"
	log "num2"
	log "num3"

define inline_script inline_script
	# set _run "self.self.experiment.set(timeFB,round(11*self.get(avg_rt)/1000,0))"
	___run__
	self.experiment.set("timeFB",self.get("avg_rt")/1000)
	self.experiment.set("acctot",100*self.get("corrcount")/self.get("trialcount"))
	__end__
	set _prepare ""
	set description "Executes Python code"

